PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine WelcomeScreen
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    TextComponent WelcomeText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        (Ethics)
        (Important Information)

        Press SPACE to continue
    ResourceManagerComponent ScreenshotResources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['Screenshots/new1.jpg', 'Screenshots/new2.jpg', 'Screenshots/old1.jpg', 'Screenshots/old2.jpg']
    KeyboardComponent WelcomeScreenKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ResourceManagerComponent FormResources
      actionType = Start and Check
      checkAll = False
      forceEndRoutine = False
      resources = ['screenshotspreadsheet.csv', 'wordlistform.csv', 'wordlistspreadsheets.csv']
  Routine ConditionSelection
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    TextComponent ConditionSelectionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        If you were assigned to condition 1 press a.
        If you were assigned to condition 2 press d.

        If you are not sure which condition you were assigned to, please ask the experimenter.
    KeyboardComponent ConditionSelectionKeyboard
      allowedKeys = 'a','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        condition = 0
      End Routine:
        if ConditionSelectionKeyboard.keys == 'a':
            condition = 1
        elif ConditionSelectionKeyboard.keys == 'd':
            condition = 2
  Routine ScreenshotOrderTask
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    ImageComponent ScreenshotLeft
      image [set every repeat] = $f"Screenshots/{Condition1Left}"
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent ScreenshotRight
      image [set every repeat] = $f"Screenshots/{Condition1Right}"
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent ScreenshotKeyboard
      allowedKeys = 'a','d'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordListStudy
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    TextComponent WordListStudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $FirstList
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  Routine WordListInstructions
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    TextComponent WordListInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now be shown a number of different words.

        Press SPACE to continue
    KeyboardComponent WordListInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine WordListTest
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    FormComponent WordListTestForm
      Data Format = columns
      Font = Noto Sans
      Item Padding = 0.05
      Items = wordlistform.csv
      Randomize = False
      Style = dark
      Text Height = 0.03
      itemColor = white
      markerColor = red
      responseColor = white
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent WordListTestKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BreakOrFinish
    RoutineSettingsComponent BreakOrFinish
      skipIf = LoopVariable == 1
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    TextComponent BreakText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = You will now take a 5 minute break! Yay!!!!
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    CodeComponent BreakCode
      Code Type = Auto->JS
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      End Routine:
        if condition == 1:
            condition = 2
        else:
            condition = 1

        LoopVariable = 1
    VariableComponent LoopVariable
      startExpValue = 0
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  Routine VideoInstructions
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    TextComponent VideoInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent VideoInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if condition == 1:
            VideoInstructionsText.setText("Please take out your phone and go the Instagram account @[Account Name]\n Please watch every video in order from top to bottom with the volume on.\n You must finish each video before scrolling to the next and only watch each video once.\n\n Press spacebar when you are finished!")
        else:
            VideoInstructionsText.setText("Please take out your phone and go to the YouTube channel @[Channel Name]\n You should watch the video [Video Name] in fullscreen with the volume on until it is complete.\n\n Press space when you are finished.")
  Routine WordListDistraction
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    TextComponent WordListDistractionText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent RandomDistractionNumber
      Code Type = Auto->JS
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      Begin Experiment:
        WordListDistractionText.setText(f"Count backwards by 3 from {randint(100,1000)} out loud")
  Routine ScreenshotInstructions
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    TextComponent ScreenshotInstructionsText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will be shown two images.
        Please indicate which one came first in the video.
        Press a for the left image and d for the right image.
        Press SPACE to continue
    KeyboardComponent ScreenshotInstructionsKeyboard
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndScreen
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    TextComponent EndScreenText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while we save your results
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    CodeComponent EndScreenCode
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = psychoJS.experiment.getResultAsCsv();

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'sg2ZTqdg0Xss', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine WelcomeScreen
  Routine ConditionSelection
  LoopInitiator WithinSubjects loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine VideoInstructions
    Routine ScreenshotInstructions
    LoopInitiator ScreenshotOrderTrial loopType="TrialHandler"
      conditionsFile = screenshotspreadsheet.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Condition1Left', 'new1.jpg'), ('Condition1Right', 'old1.jpg'), ('Correct', 'Right')]),
        OrderedDict([('Condition1Left', 'old2.jpg'), ('Condition1Right', 'new2.jpg'), ('Correct', 'Left')])]
      Routine ScreenshotOrderTask
    LoopTerminator ScreenshotOrderTrial
    Routine WordListInstructions
    LoopInitiator WordListTrial loopType="TrialHandler"
      conditionsFile = wordlistspreadsheets.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('FirstList', 'apple'), ('SecondList', 'banana')]),
        OrderedDict([('FirstList', 'muffin'), ('SecondList', 'cupcake')]),
        OrderedDict([('FirstList', 'orange'), ('SecondList', 'tangerine')]),
        OrderedDict([('FirstList', 'cat'), ('SecondList', 'dog')]),
        OrderedDict([('FirstList', 'pizza'), ('SecondList', 'beer')])]
      Routine WordListStudy
    LoopTerminator WordListTrial
    Routine WordListDistraction
    Routine WordListTest
    Routine BreakOrFinish
  LoopTerminator WithinSubjects
  Routine EndScreen
